PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u'', u'StartingBlock': u'a', u'UseMonkey': u'n'}
  expName = IRAP
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine practice_postblock_B
    CodeComponent practice_postblock_code_B
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(1.1, 'e'), (1.1, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # calculate summary stats
        prac_block_B_percentage_accuracy = (float(practice_trials_B.data['required_response_B.corr'].count()) - float(practice_trials_B.data['feedback_response_B.corr'].sum())) /  float(practice_trials_B.data['required_response_B.corr'].count()) * 100
        prac_block_B_median_latency = np.median(practice_trials_B.data['required_response_B.rt'])

        # set messages
        msg_accuracy = "%s %i %s" %(accuracy, prac_block_B_percentage_accuracy, percentCorrect)
        msg_latency = "%s %.2f %s" %(speed, prac_block_B_median_latency, seconds)

        ### save summary stats to experiment handler so they're written to the csv file
        ##thisExp.addData('prac_block_B_percentage_accuracy', prac_block_B_percentage_accuracy)
        ##thisExp.addData('prac_block_B_median_latency', prac_block_B_median_latency)
    TextComponent practice_aim_box_B
      text [set every repeat] = $aim
      pos = [0, 0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent practice_accuracy_box_B
      text [set every repeat] = $msg_accuracy
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent practice_latency_box_B
      text [set every repeat] = $msg_latency
      pos = [0, -0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent press_box_prac_B
      text [set every repeat] = $press_message
      pos = [0, -0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent practice_postblock_response_B
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_postblock_A
    CodeComponent practice_postblock_code_A
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(1.1, 'e'), (1.1, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # calculate summary stats
        try:  # first check which block was run by seeing if the object exists
            practice_trials_Afirst.data
        except NameError:
            pass
        else:  # if it does exist, calculate block summary data
            prac_block_A_percentage_accuracy = (float(practice_trials_Afirst.data['required_response_A.corr'].count()) - float(practice_trials_Afirst.data['feedback_response_A.corr'].sum())) /  float(practice_trials_Afirst.data['required_response_A.corr'].count()) * 100
            prac_block_A_median_latency = np.median(practice_trials_Afirst.data['required_response_A.rt'])

        try:
            practice_trials_Asecond.data
        except NameError:
            pass
        else:  # if it does exist, calculate block summary data
            prac_block_A_percentage_accuracy = (float(practice_trials_Asecond.data['required_response_A.corr'].count()) - float(practice_trials_Asecond.data['feedback_response_A.corr'].sum())) /  float(practice_trials_Asecond.data['required_response_A.corr'].count()) * 100
            prac_block_A_median_latency = np.median(practice_trials_Asecond.data['required_response_A.rt'])

        # set messages
        msg_accuracy = "%s %i %s" %(accuracy, prac_block_A_percentage_accuracy, percentCorrect)
        msg_latency = "%s %.2f %s" %(speed, prac_block_A_median_latency, seconds)

        ### save summary stats to experiment handler so they're written to the csv file
        ##thisExp.addData('prac_block_A_percentage_accuracy', prac_block_A_percentage_accuracy)
        ##thisExp.addData('prac_block_A_median_latency', prac_block_A_median_latency)
    TextComponent practice_aim_box_A
      text [set every repeat] = $aim
      pos = [0, 0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent practice_accuracy_box_A
      text [set every repeat] = $msg_accuracy
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent practice_latency_box_A
      text [set every repeat] = $msg_latency
      pos = [0, -0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent press_box_prac_A
      text [set every repeat] = $press_message
      pos = [0, -0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent practice_postblock_response_A
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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  Routine end
    TextComponent end_box
      text [set every repeat] = $end_message
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent end_response
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = .4
      store = nothing
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  Routine postblock_B
    CodeComponent postblock_code_B
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(1.1, 'e'), (1.1, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # calculate summary stats
        block_B_percentage_accuracy = (float(trials_B.data['required_response_B.corr'].count()) - float(trials_B.data['feedback_response_B.corr'].sum())) /  float(trials_B.data['required_response_B.corr'].count()) * 100
        block_B_median_latency = np.median(trials_B.data['required_response_B.rt'])

        # set messages
        msg_accuracy = "%s %i %s" %(accuracy, block_B_percentage_accuracy, percentCorrect)
        msg_latency = "%s %.2f %s" %(speed, block_B_median_latency, seconds)

        ### save summary stats to experiment handler so they're written to the csv file
        ##thisExp.addData('block_B_percentage_accuracy', block_B_percentage_accuracy)
        ##thisExp.addData('block_B_median_latency', block_B_median_latency)
    TextComponent aim_box_B
      text [set every repeat] = $aim
      pos = [0, 0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent accuracy_box_B
      text [set every repeat] = $msg_accuracy
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent latency_box_B
      text [set every repeat] = $msg_latency
      pos = [0, -0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent press_box_B
      text [set every repeat] = $press_message
      pos = [0, -0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent postblock_response_B
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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  Routine postblock_A
    CodeComponent postblock_code_A
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(1.1, 'e'), (1.1, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # calculate summary stats
        try:  # first check which block was run by seeing if the object exists
            trials_Afirst.data
        except NameError:
            continue
        else:  # if it does exist, calculate block summary data
            block_A_percentage_accuracy = (float(trials_Afirst.data['required_response_A.corr'].count()) - float(trials_Afirst.data['feedback_response_A.corr'].sum())) /  float(trials_Afirst.data['required_response_A.corr'].count()) * 100
            block_A_median_latency = np.median(trials_Afirst.data['required_response_A.rt'])

        try:
            trials_Asecond.data
        except NameError:
            continue
        else:  # if it does exist, calculate block summary data
            block_A_percentage_accuracy = (float(trials_Asecond.data['required_response_A.corr'].count()) - float(trials_Asecond.data['feedback_response_A.corr'].sum())) /  float(trials_Asecond.data['required_response_A.corr'].count()) * 100
            block_A_median_latency = np.median(trials_Asecond.data['required_response_A.rt'])

        # set messages
        msg_accuracy = "%s %i %s" %(accuracy, block_A_percentage_accuracy, percentCorrect)
        msg_latency = "%s %.2f %s" %(speed, block_A_median_latency, seconds)

        ### save summary stats to experiment handler so they're written to the csv file
        ##thisExp.addData('block_A_percentage_accuracy', block_A_percentage_accuracy)
        ##thisExp.addData('block_A_median_latency', block_A_median_latency)
    TextComponent aim_box_A
      text [set every repeat] = $aim
      pos = [0, 0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent accuracy_box_A
      text [set every repeat] = $msg_accuracy
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent latency_box_A
      text [set every repeat] = $msg_latency
      pos = [0, -0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent press_box_A
      text [set every repeat] = $press_message
      pos = [0, -0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent postblock_response_A
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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  Routine trial_B
    CodeComponent trial_code_B
      Begin Experiment:
        #msg variable just needs some value at start
        accuracyFeedback=''
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(0.5, 'e'), (0.5, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # For each stimlulus, choose a random exemplar from the appropriate list
        # word stimulus 1
        if stimulus1_category == 'a':
            stimulus1 = stim1_catA_stimuli_many.pop()
        elif stimulus1_category == 'b':
            stimulus1 = stim1_catB_stimuli_many.pop()

        # word stimulus 2
        if stimulus2_category == 'c':
            stimulus2 = stim2_catA_stimuli_many.pop()
        elif stimulus2_category == 'd':
            stimulus2 = stim2_catB_stimuli_many.pop()

        # image stimulus 1
        if stimulus1_category == 'a':
            img_stimulus1 = img_stim1_catA_stimuli_many.pop()
        elif stimulus1_category == 'b':
            img_stimulus1 = img_stim1_catB_stimuli_many.pop()

        # image stimulus 2
        if stimulus2_category == 'c':
            img_stimulus2 = img_stim2_catA_stimuli_many.pop()
        elif stimulus2_category == 'd':
            img_stimulus2 = img_stim2_catB_stimuli_many.pop()

        # set correct and incorrect responses
        if string_to_booleanl(moving_response_options) == False:
            response_option_left = response_option_B  # i.e., the focal trial type is the right hand one, for hand dominance
            response_option_right = response_option_A
            response_option_onset = 0  # response options are onscreen constantly
            if (trialType == 1) or (trialType == 4):
                required_allowed = 'e'  # PATTERN REVERED FROM BLOCK A
                required_correct = 'e'
                feedback_allowed = 'i'
                feedback_correct = 'i'
            elif (trialType == 2) or (trialType == 3):
                required_allowed = 'i'  # PATTERN REVERED FROM BLOCK A
                required_correct = 'i'
                feedback_allowed = 'e'
                feedback_correct = 'e'
        elif string_to_booleanl(moving_response_options) == True:
            rand_positions = randint(1, 3)
            response_option_onset = 0.4  # response options appear with stimuli
            if rand_positions == 1:
                response_option_left = response_option_B
                response_option_right = response_option_A
                if (trialType == 1) or (trialType == 4):
                    required_allowed = 'e'  # PATTERN REVERED FROM BLOCK A
                    required_correct = 'e'
                    feedback_allowed = 'i'
                    feedback_correct = 'i'
                elif (trialType == 2) or (trialType == 3):
                    required_allowed = 'i'  # PATTERN REVERED FROM BLOCK A
                    required_correct = 'i'
                    feedback_allowed = 'e'
                    feedback_correct = 'e'
            elif rand_positions == 2:
                response_option_left = response_option_A
                response_option_right = response_option_B
                if (trialType == 1) or (trialType == 4):
                    required_allowed = 'i'  # PATTERN REVERED FROM BLOCK A
                    required_correct = 'i'
                    feedback_allowed = 'e'
                    feedback_correct = 'e'
                elif (trialType == 2) or (trialType == 3):
                    required_allowed = 'e'  # PATTERN REVERED FROM BLOCK A
                    required_correct = 'e'
                    feedback_allowed = 'i'
                    feedback_correct = 'i'
      End Routine:
        # save exemplars to experiment handler so they're written to the csv file
        thisExp.addData('stimulus1', stimulus1)
        thisExp.addData('stimulus2', stimulus2)
        thisExp.addData('img_stimulus1', img_stimulus1)
        thisExp.addData('img_stimulus2', img_stimulus2)
        thisExp.addData('response_option_left', response_option_left)
        thisExp.addData('response_option_right', response_option_right)
      Each Frame:
        # Accuracy feedback message
        if len(feedback_response_B.keys)<1:
            accuracyFeedback=""
        else:
            accuracyFeedback="X"
    ImageComponent image_stimulus1_box_B
      pos [set every repeat] = image_stimulus1_location
      startVal [time (s)] = 0.4
      image [set every repeat] = $img_stimulus1
      size = [0.5, 0.5]
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    ImageComponent image_stimulus2_box_B
      pos [set every repeat] = image_stimulus2_location
      startVal [time (s)] = 0.4
      image [set every repeat] = $img_stimulus2
      size = [0.5, 0.5]
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    TextComponent stimulus1_box_B
      text [set every repeat] = $stimulus1
      pos [set every repeat] = stimulus1_location
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    TextComponent stimulus2_box_B
      text [set every repeat] = $stimulus2
      pos [set every repeat] = stimulus2_location
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent required_response_B
      correctAns = $required_correct
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = required_allowed
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent feedback_response_B
      correctAns = $feedback_correct
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedback_allowed
      startVal [time (s)] = 0.4
      store = first key
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    TextComponent left_box_B
      text [set every repeat] = $response_option_left
      pos [set every repeat] = response_option_left_location
      startEstim = 0
      startVal [time (s)] = $response_option_onset
      letterHeight = 0.1
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    TextComponent right_box_B
      text [set every repeat] = $response_option_right
      pos [set every repeat] = response_option_right_location
      startEstim = 0
      startVal [time (s)] = $response_option_onset
      letterHeight = 0.1
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    TextComponent accuracy_feedback_box_B
      color = red
      text [set every frame] = $accuracyFeedback
      pos [set every repeat] = accuracy_feedback_location
      startVal [time (s)] = 0.4
      letterHeight = 0.2
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  Routine trial_A
    CodeComponent trial_code_A
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(0.5, 'e'), (0.5, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # For each stimlulus, choose a random exemplar from the appropriate list
        # word stimulus 1
        if stimulus1_category == 'a':
            stimulus1 = stim1_catA_stimuli_many.pop()
        elif stimulus1_category == 'b':
            stimulus1 = stim1_catB_stimuli_many.pop()

        # word stimulus 2
        if stimulus2_category == 'c':
            stimulus2 = stim2_catA_stimuli_many.pop()
        elif stimulus2_category == 'd':
            stimulus2 = stim2_catB_stimuli_many.pop()

        # image stimulus 1
        if stimulus1_category == 'a':
            img_stimulus1 = img_stim1_catA_stimuli_many.pop()
        elif stimulus1_category == 'b':
            img_stimulus1 = img_stim1_catB_stimuli_many.pop()

        # image stimulus 2
        if stimulus2_category == 'c':
            img_stimulus2 = img_stim2_catA_stimuli_many.pop()
        elif stimulus2_category == 'd':
            img_stimulus2 = img_stim2_catB_stimuli_many.pop()

        # set correct and incorrect responses
        if string_to_booleanl(moving_response_options) == False:
            response_option_left = response_option_B  # i.e., the focal trial type is the right hand one, for hand dominance
            response_option_right = response_option_A
            response_option_onset = 0  # response options are onscreen constantly
            if (trialType == 1) or (trialType == 4):
                required_allowed = 'i'
                required_correct = 'i'
                feedback_allowed = 'e'
                feedback_correct = 'e'
            elif (trialType == 2) or (trialType == 3):
                required_allowed = 'e'
                required_correct = 'e'
                feedback_allowed = 'i'
                feedback_correct = 'i'
        elif string_to_booleanl(moving_response_options) == True:
            rand_positions = randint(1, 3)
            response_option_onset = 0.4  # response options appear with stimuli
            if rand_positions == 1:
                response_option_left = response_option_B
                response_option_right = response_option_A
                if (trialType == 1) or (trialType == 4):
                    required_allowed = 'i'
                    required_correct = 'i'
                    feedback_allowed = 'e'
                    feedback_correct = 'e'
                elif (trialType == 2) or (trialType == 3):
                    required_allowed = 'e'
                    required_correct = 'e'
                    feedback_allowed = 'i'
                    feedback_correct = 'i'
            elif rand_positions == 2:
                response_option_left = response_option_A
                response_option_right = response_option_B
                if (trialType == 1) or (trialType == 4):
                    required_allowed = 'e'
                    required_correct = 'e'
                    feedback_allowed = 'i'
                    feedback_correct = 'i'
                elif (trialType == 2) or (trialType == 3):
                    required_allowed = 'i'
                    required_correct = 'i'
                    feedback_allowed = 'e'
                    feedback_correct = 'e'
      End Routine:
        # save exemplars to experiment handler so they're written to the csv file
        thisExp.addData('stimulus1', stimulus1)
        thisExp.addData('stimulus2', stimulus2)
        thisExp.addData('img_stimulus1', img_stimulus1)
        thisExp.addData('img_stimulus2', img_stimulus2)
        thisExp.addData('response_option_left', response_option_left)
        thisExp.addData('response_option_right', response_option_right)
      Each Frame:
        # Accuracy feedback message
        if len(feedback_response_A.keys)<1:
            accuracyFeedback=""
        else:
            accuracyFeedback="X"
    ImageComponent image_stimulus1_box_A
      pos [set every repeat] = image_stimulus1_location
      startVal [time (s)] = 0.4
      image [set every repeat] = $img_stimulus1
      size = [0.5, 0.5]
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    ImageComponent image_stimulus2_box_A
      pos [set every repeat] = image_stimulus2_location
      startVal [time (s)] = 0.4
      image [set every repeat] = $img_stimulus2
      size = [0.5, 0.5]
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    TextComponent stimulus1_box_A
      text [set every repeat] = $stimulus1
      pos [set every repeat] = stimulus1_location
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    TextComponent stimulus2_box_A
      text [set every repeat] = $stimulus2
      pos [set every repeat] = stimulus2_location
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent required_response_A
      correctAns = $required_correct
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = required_allowed
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent feedback_response_A
      correctAns = $feedback_correct
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedback_allowed
      startVal [time (s)] = 0.4
      store = first key
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    TextComponent left_box_A
      text [set every repeat] = $response_option_left
      pos [set every repeat] = response_option_left_location
      startEstim = 0
      startVal [time (s)] = $response_option_onset
      letterHeight = 0.1
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    TextComponent right_box_A
      text [set every repeat] = $response_option_right
      pos [set every repeat] = response_option_right_location
      startEstim = 0
      startVal [time (s)] = $response_option_onset
      letterHeight = 0.1
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    TextComponent accuracy_feedback_box_A
      color = red
      text [set every frame] = $accuracyFeedback
      pos [set every repeat] = accuracy_feedback_location
      startVal [time (s)] = 0.4
      letterHeight = 0.2
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  Routine end_practice_blocks
    CodeComponent end_practice_code
      Begin Experiment:
        # by default, don't do test blocks. Change elsewhere if mastery criteria are met.
        complete_test_blocks = 0
      Begin Routine:
        # Assess if acc and latency mastery criteria were met
        if (prac_block_A_percentage_accuracy >= accuracyCriterion) and (prac_block_B_percentage_accuracy >= accuracyCriterion) and (prac_block_A_median_latency <= latencyCriterion) and (prac_block_B_median_latency <= latencyCriterion):
            complete_test_blocks = n_pairs_test_blocks # latter from blocks.xlsx
            practice_blocks.finished = True
  Routine preblock_A
    CodeComponent preblock_A_code
      Begin Experiment:
        # msg variable just needs some value at start
        accuracyFeedback=''
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(1.1, 'e'), (1.1, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # Generate list of stimuli for the block
        stim1_catA_stimuli_many = generate_trials('labelA_stimuli', 2, True)  # function and variable determined at begin exp.
        stim1_catB_stimuli_many = generate_trials('labelB_stimuli', 2, True)
        stim2_catA_stimuli_many = generate_trials('targetA_stimuli', 2, True)
        stim2_catB_stimuli_many = generate_trials('targetB_stimuli', 2, True)
        img_stim1_catA_stimuli_many = generate_trials('labelA_image_stimuli', 2, True)
        img_stim1_catB_stimuli_many = generate_trials('labelB_image_stimuli', 2, True)
        img_stim2_catA_stimuli_many = generate_trials('targetA_image_stimuli', 2, True)
        img_stim2_catB_stimuli_many = generate_trials('targetB_image_stimuli', 2, True)
    TextComponent rule_box_A
      wrapWidth = 1.5
      color = orange
      text [set every repeat] = $rule_A
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent preblock_response_A
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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  Routine preblock_B
    CodeComponent preblock_B_code
      Begin Routine:
        # Option to simulates using ResponseEmulator:
        if Monkey:
            simulated_responses = [(1.1, 'e'), (1.1, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # Generate list of stimuli for the block
        stim1_catA_stimuli_many = generate_trials('labelA_stimuli', 2, True)  # function and variable determined at begin exp.
        stim1_catB_stimuli_many = generate_trials('labelB_stimuli', 2, True)
        stim2_catA_stimuli_many = generate_trials('targetA_stimuli', 2, True)
        stim2_catB_stimuli_many = generate_trials('targetB_stimuli', 2, True)
        img_stim1_catA_stimuli_many = generate_trials('labelA_image_stimuli', 2, True)
        img_stim1_catB_stimuli_many = generate_trials('labelB_image_stimuli', 2, True)
        img_stim2_catA_stimuli_many = generate_trials('targetA_image_stimuli', 2, True)
        img_stim2_catB_stimuli_many = generate_trials('targetB_image_stimuli', 2, True)
    TextComponent rule_box_B
      wrapWidth = 1.5
      color = cyan
      text [set every repeat] = $rule_B
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent preblock_response_B
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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  Routine instructions
    CodeComponent inst_code
      Begin Experiment:
        # Dependencies

        from psychopy.hardware.emulator import ResponseEmulator  #for response emulator
        import itertools  # for flattening lists of lists into lists
        import random  # for shuffling lists

        # Functions

        # Convert string to boolean.
        # Take any likely input from the task.xlsx file and convert to a boolean. This helps to idiot-proof the excel files.
        def string_to_booleanl(v):
          return v.lower() in ("yes", "true", "TRUE", "True", "t", "T", "1")

        # Trial generation function
        def generate_trials(trial_type_column, multiplier, shuffle_list):
            """Generate a shuffled list of stimuli exemplars from a column in an excel stimuli file"""
            a = dict()  # declare a dict to be populated
            for i in range(len(exemplars)):
                a[i] = [exemplars[i][trial_type_column]] * multiplier  # populate the dict from vertical reads of the conditions
            a = a.values()  # extract only values (and not keys) from the list of dicts
            a = list(itertools.chain(*a))  # flatten the list of dicts into a list
            if shuffle_list == True:
                random.shuffle(a)  # shuffle this list, so that it can be drawn from by the trials
            return a


        # Determine variables based on dialogue box

        # auto response monkey
        if str(expInfo['UseMonkey']) == 'y' or str(expInfo['UseMonkey']) == 'Y' or str(expInfo['UseMonkey']) == 'yes' or str(expInfo['UseMonkey']) == 't' or str(expInfo['UseMonkey']) == 'true' or str(expInfo['UseMonkey']) == 'True' or str(expInfo['UseMonkey']) == 'TRUE':
            Monkey = True
        else:
            Monkey = False

        # starting block
        if str(expInfo['StartingBlock']) == 'a' or str(expInfo['StartingBlock']) == 'A':
            starting_block = 'a'
            Afirst_nReps = 1
            Asecond_nReps = 0
        elif str(expInfo['StartingBlock']) == 'b' or str(expInfo['StartingBlock']) == 'B':
            starting_block = 'b'
            Afirst_nReps = 0
            Asecond_nReps = 1
      Begin Routine:
        # ResponseEmulator
        if Monkey:
            simulated_responses = [(1.1, 'e'), (1.1, 'i')]  # simulated responses take the form (onsetTime, responseKey). You can simulate more than one.
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # Create sufficiently long lists of stimuli
        """
        This allows us to keep the stimuli in an excel file across multiple lines, and to present them based on the categories
        set by the 'layout.xlsx' file. This allows for shuffled (counterbalanced pseudorandom) presentation of the stimuli examplars
        as well as the categories.

        The method to do this below is to first declare a dictionary to be populated from the exemplars conditions, but not in the usual way.
        Usually, psychopy would read across columns. If the stimuli were entered as a list within the excel file (e.g., ['male', 'female'])
        rather on seperate rows as they are now all we would have to do is multiply the length of the list to get enough exemplars. However,
        I wanted the stimuli file to be as use friendly as possible, so instead the below code allows you to enter the exemplars on seperate
        rows, and then populates the dict vertically from the rows.
        """
        # Import stimuli exemplars
        exemplars = data.importConditions(stimulus_file)  # Import stimuli exemplars. stimulus_file is defined in task.xlsx

        # Determine nReps of trials loop based on number of exemplars
        reptitions = len(exemplars)


        # Generate a first, unshuffled list of the stimuli exemplars for saving to output file

        # 1. generate: no shuffling, multiplier = 1.
        labelA_stimuli_for_output = generate_trials('labelA_stimuli', 1, False)  # function and variable determined at begin exp.
        labelB_stimuli_for_output = generate_trials('labelB_stimuli', 1, False)
        targetA_stimuli_for_output = generate_trials('targetA_stimuli', 1, False)
        targetB_stimuli_for_output = generate_trials('targetB_stimuli', 1, False)
        labelA_image_stimuli_for_output = generate_trials('labelA_image_stimuli', 1, False)
        labelB_image_stimuli_for_output = generate_trials('labelB_image_stimuli', 1, False)
        targetA_image_stimuli_for_output = generate_trials('targetA_image_stimuli', 1, False)
        targetB_image_stimuli_for_output = generate_trials('targetB_image_stimuli', 1, False)

        # 2. save these lists to the trial handler to be written to csv
        thisExp.addData('labelA_stimuli_for_output', labelA_stimuli_for_output)
        thisExp.addData('labelB_stimuli_for_output', labelB_stimuli_for_output)
        thisExp.addData('targetA_stimuli_for_output', targetA_stimuli_for_output)
        thisExp.addData('targetB_stimuli_for_output', targetB_stimuli_for_output)
        thisExp.addData('labelA_image_stimuli_for_output', labelA_image_stimuli_for_output)
        thisExp.addData('labelB_image_stimuli_for_output', labelB_image_stimuli_for_output)
        thisExp.addData('targetA_image_stimuli_for_output', targetA_image_stimuli_for_output)
        thisExp.addData('targetB_image_stimuli_for_output', targetB_image_stimuli_for_output)
    TextComponent intro_box
      wrapWidth = 1.5
      text [set every repeat] = $intro_message
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent intro_resp
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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Flow
  LoopInitiator task loopType="TrialHandler"
    conditionsFile = task.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'response_option_left_location': [-0.3, -0.6], u'accuracyCriterion': 0, u'response_option_right_location': [0.3, -0.6], u'end_message': u'End of task', u'image_stimulus1_location': [0, 0.3], u'speed': u'Speed:', u'rule_A': u"Respond AS IF: \n    flowers are positive\n    insects are negative\n\nGo as quickly as you can while being accurate\n\nPress 'e' or 'i' to continue", u'rule_B': u"Respond AS IF: \n    insects are positive \n    flowers are negative\n\nGo as quickly as you can while being accurate\n\nPress 'e' or 'i' to continue", u'press_message': u"Press 'e' or 'i' to continue", u'int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,
      {u'response_option_left_location': [-0.3, -0.6], u'accuracyCriterion': 0, u'response_option_right_location': [0.3, -0.6], u'end_message': u'End of task', u'image_stimulus1_location': [0, 0.3], u'speed': u'Speed:', u'rule_A': u"Respond AS IF: \n    I am positive\n    Others are negative\n\nGo as quickly as you can while being accurate\n\nPress 'e' or 'i' to continue", u'rule_B': u"Respond AS IF: \n    I am negative \n    Others are positive\n\nGo as quickly as you can while being accurate\n\nPress 'e' or 'i' to continue", u'press_message': u"Press 'e' or 'i' to continue", u'intro_message': u"Th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
    Routine instructions
    LoopInitiator practice_blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = max_pairs_practice_blocks
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      LoopInitiator practice_Afirst loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = Afirst_nReps
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        Routine preblock_A
        LoopInitiator practice_trials_Afirst loopType="TrialHandler"
          conditionsFile = block_layout.xlsx
          loopType = random
          nReps = reptitions
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          conditions:
            [{u'trialType': 1, u'stimulus1_category': u'a', u'stimulus2_category': u'c'},
            {u'trialType': 2, u'stimulus1_category': u'a', u'stimulus2_category': u'd'},
            {u'trialType': 3, u'stimulus1_category': u'b', u'stimulus2_category': u'c'},
            {u'trialType': 4, u'stimulus1_category': u'b', u'stimulus2_category': u'd'}]
          Routine trial_A
        LoopTerminator practice_trials_Afirst
        Routine practice_postblock_A
      LoopTerminator practice_Afirst
      Routine preblock_B
      LoopInitiator practice_trials_B loopType="TrialHandler"
        conditionsFile = block_layout.xlsx
        loopType = random
        nReps = reptitions
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        conditions:
          [{u'trialType': 1, u'stimulus1_category': u'a', u'stimulus2_category': u'c'},
          {u'trialType': 2, u'stimulus1_category': u'a', u'stimulus2_category': u'd'},
          {u'trialType': 3, u'stimulus1_category': u'b', u'stimulus2_category': u'c'},
          {u'trialType': 4, u'stimulus1_category': u'b', u'stimulus2_category': u'd'}]
        Routine trial_B
      LoopTerminator practice_trials_B
      Routine practice_postblock_B
      LoopInitiator practice_Asecond loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = Asecond_nReps
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        Routine preblock_A
        LoopInitiator practice_trials_Asecond loopType="TrialHandler"
          conditionsFile = block_layout.xlsx
          loopType = random
          nReps = reptitions
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          conditions:
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          Routine trial_A
        LoopTerminator practice_trials_Asecond
        Routine practice_postblock_A
      LoopTerminator practice_Asecond
      Routine end_practice_blocks
    LoopTerminator practice_blocks
    LoopInitiator test_blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = complete_test_blocks
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      LoopInitiator Afirst loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = Afirst_nReps
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        Routine preblock_A
        LoopInitiator trials_Afirst loopType="TrialHandler"
          conditionsFile = block_layout.xlsx
          loopType = random
          nReps = reptitions
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          conditions:
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          Routine trial_A
        LoopTerminator trials_Afirst
        Routine postblock_A
      LoopTerminator Afirst
      Routine preblock_B
      LoopInitiator trials_B loopType="TrialHandler"
        conditionsFile = block_layout.xlsx
        loopType = random
        nReps = reptitions
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        conditions:
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        Routine trial_B
      LoopTerminator trials_B
      Routine postblock_B
      LoopInitiator Asecond loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = Asecond_nReps
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        Routine preblock_A
        LoopInitiator trials_Asecond loopType="TrialHandler"
          conditionsFile = block_layout.xlsx
          loopType = random
          nReps = reptitions
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          conditions:
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          Routine trial_A
        LoopTerminator trials_Asecond
        Routine postblock_A
      LoopTerminator Asecond
    LoopTerminator test_blocks
    Routine end
  LoopTerminator task
